PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine main_trial
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    ImageComponent stimulus_presentation_main
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent yesno_response_main
      allowedKeys = 'y','n','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_response_main
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hey!

        Press any key to continue!

        This is v1
    KeyboardComponent welcome_response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_written_response
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    TextboxComponent textbox_response_training
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Melyik fogalomra gondoltál?
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent end_textinput_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Kész!
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  Routine training_stimulus_presentation
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    ImageComponent stimulus_presentation_train
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent yesno_response_train
      allowedKeys = 'y','n','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent stop_training
      allowedKeys = 'q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_train
      Code Type = Both
      disabled = True
      Begin JS Routine:
        stop_training.keys = [];
      Each Frame:
        # press Q to stop the training loop
        if stop_training.keys:
            training_loop.finished = True
            continueRoutine = False
      Each JS Frame:
        // press Q to stop the training loop
        if (stop_training.keys.length > 0) {
            training_loop.finished = true;
            continueRoutine = false;
        }
Flow
  Routine welcome
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = sequences/training.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('stimulus', 'stim001.png')]),
      OrderedDict([('stimulus', 'stim002.png')]),
      OrderedDict([('stimulus', 'stim003.png')])]
    Routine training_stimulus_presentation
    Routine training_written_response
  LoopTerminator training_loop
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = sequences/main.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('stimulus', 'stim004.png')]),
      OrderedDict([('stimulus', 'stim005.png')]),
      OrderedDict([('stimulus', 'stim006.png')])]
    Routine main_trial
  LoopTerminator main_loop
